PsychoPy2experiment version="1.85.1"
Settings
  Monitor = laptop
  color = black
  Experiment info = {u'gender (m/f)': u'', u'age': u'', u'participant': u''}
  Units = pix
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Use version = latest
  Save log file = False
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  expName = rand_display_pilot1
  logging level = warning
  Screen = 1
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Routines
  Routine mask1
    DotsComponent dots
      startVal [time (s)] = 0.0
      fieldPos = (0.0, 0.0)
      speed = 0.4
      noiseDots = walk
      dotLife = 1
      units = norm
      refreshDots = repeat
      fieldShape = circle
      coherence = 1.0
      nDots = 5000
      stopVal [duration (s)] = 0.5
      fieldSize = 4.0
      signalDots = same
      dotSize = 2
      dir = 0
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  Routine trial_prac
    CodeComponent setImage_2
      Begin Experiment:
        #in this experiment a body will appear on the screen
        #the stimuli will change with a button press of up, down, left, right
        #this will change the image stimuli being presented
        #the stimuli have file names using integers that will be changed on the button press
        #e.g. 1_5_2.png is a very thin body, facing right, so the filename is weight_orientation.png
        #as weight changes, the body weight (really the body mass index) changes too, e.g. 10_5.png is large weight
        #as orientation changes, the direction of the body will change too, e.g. 1_4.png is slightly less left facing
        #weight varies from 1-10
        #orientation varies from 1-5

        import re

        #create a list of image numbers as strings 1-10, this is for the weight of the body
        imgList=["1", "2", "3", "4", "5", "6", "7", "8", "9", "10"]
        #create a list of image numbers as strings 1-5, this is for the orientation of the body
        imgList2=["1", "2", "3", "4","5"]

        #set size of images
        size1 = (109, 271)

        imgChoice1=""
      Begin Routine:
        #create a list of image numbers as strings 1-10, this is for the weight of the body
        imgList=["1", "2", "3", "4", "5", "6", "7", "8", "9", "10"]
        #create a list of image numbers as strings 1-5, this is for the orientation of the body
        imgList2=["1", "2", "3", "4","5"]

        imgChoice1=""

        #generate a random number between 1 and 10 for the starting image to be presented as
        imgStart=randint(1,10)
        imgStart2=randint(1,5)
      End Routine:
        #save data
        #comment the code below if you do not want the data to be stored, or uncomment each line

        #saves .png file name of image choice e.g. stims/1_5.png
        trials.addData('imgChoice1', imgChoice1)

        #save numeric version e.g. 15 = size 1 and orientation 5
        trials.addData('choice_trial', choice_trial)

        #save numeric choice but just for size e.g. 1
        trials.addData('choice_trial_size', choice_trial_size)

        #save numeric chioce but just for orientation e.g. 5
        trials.addData('choice_trial_view', choice_trial_view)
      Each Frame:
        import re

        #create a list of image numbers as strings 1-10, this is for the weight of the body
        imgList=["1", "2", "3", "4", "5", "6", "7", "8", "9", "10"]
        #create a list of image numbers as strings 1-5, this is for the orientation of the body
        imgList2=["1", "2", "3", "4","5"]

        #set the initial starting image, this will be a random configiration of size and orientation
        imgChoice=str(imgStart)
        imgChoice2=str(imgStart2)

        #if loop for to set the image, dependent on checkKeys_2 code component
        if imgChoice in imgList:
          imgChoice1="stims/"+imgChoice+"_"+imgChoice2+".png"

        #create a variable to store which image size and orientation is selected
        choice_trial=re.sub("[^0-9]", "", imgChoice1)
        choice_trial_size=re.sub("[^0-9]", "", imgChoice)
        choice_trial_view=re.sub("[^0-9]", "", imgChoice2)
    ImageComponent upArrow1_2
      pos = (0, 200)
      startVal [time (s)] = 0.0
      image = stims/upArrow.png
      size = (40, 70)
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    ImageComponent leftArrow1_2
      pos = (-150, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = stims/leftArrow.png
      size = (70, 40)
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    ImageComponent rightArrow1_2
      pos = (150, 0)
      units = pix
      startVal [time (s)] = 0.0
      image = stims/rightArrow.png
      size = (70, 40)
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    ImageComponent downArrow1_2
      pos = (0, -200)
      units = pix
      startVal [time (s)] = 0.0
      image = stims/downArrow.png
      size = (40, 70)
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    ImageComponent image_trial_2
      texture resolution = 256
      startVal [time (s)] = 0.0
      image [set every frame] = $imgChoice1
      size = (109, 271)
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    CodeComponent checkKeys_2
      Each Frame:
        #key response
        #if loops where pressing left, right, up or down will increase or decrease the integer of imgStart (see setImage_2 code component)
        #as the min and max numbers for the stimuli are 1 and 10 for size, and 1 and 5 for orientation respectively,
        #the 'else' command limits the number from going less or more than these integers

        #decrease size with left button
        if event.getKeys(['left']):
          if imgStart>1:
            imgStart=imgStart-1
          else:
            imgStart=1

        #increase size with right button
        if event.getKeys(['right']):
          if imgStart<10:
            imgStart=imgStart+1
          else:
            imgStart=10

        #rotate orientation left with down button
        if event.getKeys(['down']):
          if imgStart2>1:
            imgStart2=imgStart2-1
          else:
            imgStart2=1

        #roate orientation right with up button
        if event.getKeys(['up']):
          if imgStart2<5:
            imgStart2=imgStart2+1
          else:
            imgStart2=5
    KeyboardComponent decisionButton_2
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instructionsTrial_2
      wrapWidth = 700
      pos = (0, 325)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 20
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      text:
        Please choose which image you think represented the average body shape
                                            from the previous display

                          Use the 'left' and 'right' keys to change the body size
                         Use the 'up' and 'down' keys to change the body view
    TextComponent pressEntText_2
      wrapWidth = 600
      text = press 'ENTER' to choose the image
      pos = (0, -300)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 20
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Trial_lists/practice_SizeList1.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'view_cond': 1, 'actual_mean': 6, 'img15': u'stims/0_0_2.png', 'img14': u'stims/0_0_2.png', 'img13': u'stims/0_0_2.png', 'trial_dur': 2.5, 'img11': u'stims/0_0_2.png', 'img12': u'stims/0_0_2.png', 'img9': u'stims/0_0_2.png', 'img8': u'stims/0_0_2.png', 'Std_dev': 0.0, 'num_imgs': 1, 'img3': u'stims/0_0_2.png', 'img2': u'stims/0_0_2.png', 'img1': u'stims/6_1_2.png', 'img10': u'stims/0_0_2.png', 'img7': u'stims/0_0_2.png', 'img6': u'stims/0_0_2.png', 'img5': u'stims/0_0_2.png', 'img4': u'stims/0_0_2.png'},
      {'view_cond': 2, 'actual_mean': 4, 'img15': u'stims/0_0_2.png', 'img14': u'stims/0_0_2.png', 'img13': u'stims/0_0_2.png', 'trial_dur': 2.5, 'img11': u'stims/0_0_2.png', 'img12': u'stims/0_0_2.png', 'img9': u'stims/0_0_2.png', 'img8': u'stims/0_0_2.png', 'Std_dev': 3.937003937, 'num_imgs': 5, 'img3': u'stims/2_2_2.png', 'img2': u'stims/1_2_2.png', 'img1': u'stims/1_2_2.png', 'img10': u'stims/0_0_2.png', 'img7': u'stims/0_0_2.png', 'img6': u'stims/0_0_2.png', 'img5': u'stims/10_2_2.png', 'img4': u'stims/6_2_2.png'},
      {'view_cond': 3, 'actual_mean': 7, 'img15': u'stims/0_0_2.png', 'img14': u'stims/0_0_2.png', 'img13': u'stims/0_0_2.png', 'trial_dur': 2.5, 'img11': u'stims/0_0_2.png', 'img12': u'stims/0_0_2.png', 'img9': u'stims/9_3_2.png', 'img8': u'stims/9_3_2.png', 'Std_dev': 3.16227766, 'num_imgs': 10, 'img3': u'stims/4_3_2.png', 'img2': u'stims/3_3_2.png', 'img1': u'stims/1_3_2.png', 'img10': u'stims/10_3_2.png', 'img7': u'stims/9_3_2.png', 'img6': u'stims/9_3_2.png', 'img5': u'stims/9_3_2.png', 'img4': u'stims/7_3_2.png'},
      {'view_cond': 4, 'actual_mean': 5, 'img15': u'stims/10_4_2.png', 'img14': u'stims/8_4_2.png', 'img13': u'stims/8_4_2.png', 'trial_dur': 2.5, 'img11': u'stims/8_4_2.png', 'img12': u'stims/8_4_2.png', 'img9': u'stims/6_4_2.png', 'img8': u'stims/4_4_2.png', 'Std_dev': 3.16227766, 'num_imgs': 15, 'img3': u'stims/1_4_2.png', 'img2': u'stims/1_4_2.png', 'img1': u'stims/1_4_2.png', 'img10': u'stims/8_4_2.png', 'img7': u'stims/4_4_2.png', 'img6': u'stims/4_4_2.png', 'img5': u'stims/2_4_2.png', 'img4': u'stims/2_4_2.png'}]
    Routine trial_prac
    Routine mask1
  LoopTerminator trials
